PsychoPy2experiment version="2025.1.0"
Settings
  expName = P3_KL_C
  expVersion = KL-C-P3-diag-1
  Experiment info = {'participant':'TEST-01','session':'01'}
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Full-screen window = False
  Window size (pixels) = [1920,1080]
  Units = pix
  Screen = 1
  Monitor = testMonitor
  Show mouse = True
  color = black
  Save excel file = True
  Save hdf5 file = True
  eyetracker = eyetracker.hw.mouse.EyeTracker
  mgBlink = ['MIDDLE_BUTTON']
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  logging level = warning
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine intro
    RoutineSettingsComponent intro
      color = black
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    CodeComponent lsl_intro
      Code Type = Py
      Begin Experiment:
        from lsl_runtime import LBKMonitor
        from psychopy import event as klc_event
        from pylsl import local_clock as klc_clock
        from types import SimpleNamespace as klc_sample

        class KLCPointerGaze:
            """Lokalna kontrola jakosci MouseGaze przez cala sesje.

            MouseGaze (ioHub) nadal zapisuje dane w etRecord podczas pokazu obrazu.
            Poza ta routine jego getLastSample() zwraca None, wiec tutaj
            obserwujemy kursor niezaleznie od tego, czy etRecord nagrywa.
            To symulacja wzroku na komputerze, NIE pomiar rzeczywistego oka.
            """
            def __init__(self, window):
                self.window = window
                self.mouse = klc_event.Mouse(win=window)

            def getLastSample(self):
                try:
                    xy = self.mouse.getPos()
                    buttons = self.mouse.getPressed()
                    x, y = float(xy[0]), float(xy[1])
                    width, height = self.window.size
                    # pix: (0, 0) w srodku okna; przycisk oznacza artefakt/mrugniecie.
                    valid = (-width / 2 <= x <= width / 2 and
                             -height / 2 <= y <= height / 2 and
                             not any(buttons))
                    return klc_sample(time=klc_clock(), gaze_x=x, gaze_y=y,
                                      status=0 if valid else 2)
                except (AttributeError, TypeError, ValueError, IndexError):
                    return None

        lbk = LBKMonitor(participant=expInfo['participant'])
        klc_gaze_source = KLCPointerGaze(win)
      Each Frame:
        lbk.poll(tracker=klc_gaze_source)
      End Routine:
        lbk.marker('exp:start|study=P3|list=L1_LBK_4obrazy_test|stage=KL-C')
    TextComponent instrukcja
      text = P3 - Qualia, barwa i subiektywne doswiadczenie\nTest jednego bloku z czterema obrazami LBK.\nOgladaj obrazy swobodnie. Po bloku ocen pobudzenie w skali 1-9.\nNacisnij spacje, aby zaczac.
      letterHeight = 38
      wrapWidth = 1500
      startVal [time (s)] = 0.0
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    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine fixation
    RoutineSettingsComponent fixation
      color = black
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    CodeComponent lsl_fix
      Code Type = Py
      Begin Routine:
        lbk.marker('trial:start|trial=' + str(trial_id))
      Each Frame:
        lbk.poll(tracker=klc_gaze_source)
    TextComponent krzyzyk
      text = +
      letterHeight = 80
      wrapWidth = 1500
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine stimulus
    RoutineSettingsComponent stimulus
      color = black
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    CodeComponent lsl_stim
      Code Type = Py
      Begin Routine:
        win.callOnFlip(lbk.marker, 'stim:onset|stim=' + str(stimulus_id))
      Each Frame:
        lbk.poll(tracker=klc_gaze_source)
      End Routine:
        lbk.marker('stim:offset|stim=' + str(stimulus_id))
    ImageComponent obraz
      image [set every repeat] = $image_file
      size [set every repeat] = $[stim_width, stim_height]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
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  Routine baseline
    RoutineSettingsComponent baseline
      color = 0
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    CodeComponent lsl_baseline
      Code Type = Py
      Begin Routine:
        lbk.start_baseline()
      Each Frame:
        lbk.poll(tracker=klc_gaze_source)
      End Routine:
        lbk.finish_baseline()
    TextComponent tekst_baseline
      text = +
      letterHeight = 24
      wrapWidth = 1500
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
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    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = True
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  Routine gray
    RoutineSettingsComponent gray
      color = 0
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    CodeComponent lsl_gray
      Code Type = Py
      Each Frame:
        lbk.poll(tracker=klc_gaze_source)
    TextComponent szary_ekran
      letterHeight = 20
      wrapWidth = 1500
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine rating
    RoutineSettingsComponent rating
      color = black
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    CodeComponent lsl_rating
      Code Type = Py
      Each Frame:
        lbk.poll(tracker=klc_gaze_source)
      End Routine:
        if rating_resp.keys:
            rt_value = rating_resp.rt if rating_resp.rt is not None else -1.0
            lbk.marker('resp|q=SAM_AROUSAL_ROBOCZE|key=' + str(rating_resp.keys) + '|rt=' + str(round(float(rt_value), 3)))
    TextComponent pytanie
      text = Ocena po bloku (roboczy element SAM):\nJak silne pobudzenie odczuwalas/es podczas ogladania obrazow?\n1 = bardzo male, 9 = bardzo silne. Wybierz klawisz 1-9.
      letterHeight = 37
      wrapWidth = 1500
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine monitoring
    RoutineSettingsComponent monitoring
      color = 0
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    CodeComponent lsl_monitoring
      Code Type = Py
      Begin Routine:
        lbk.marker('block:start|block=monitoring_klc')
      Each Frame:
        lbk.poll(tracker=klc_gaze_source)
      End Routine:
        lbk.marker('block:end|block=monitoring_klc')
    TextComponent tekst_monitoring
      letterHeight = 28
      wrapWidth = 1200
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 340.0
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      text:
        Etap techniczny KL-C (340 s).
        Pozostan przy ekranie.
        Mozesz poruszac mysza i symulowac mrugniecia srodkowym przyciskiem.
  Routine end
    RoutineSettingsComponent end
      color = black
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    CodeComponent lsl_end
      Code Type = Py
      Begin Routine:
        lbk.marker('exp:end')
      Each Frame:
        lbk.poll(tracker=klc_gaze_source)
      End Experiment:
        lbk.close()
    TextComponent koniec
      text = Koniec testu. Dziekujemy!
      letterHeight = 42
      wrapWidth = 1500
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    EyetrackerRecordComponent etStop
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = True
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Flow
  Routine intro
  Routine baseline
  LoopInitiator trials loopType="TrialHandler"
    nReps = 1
    conditionsFile = conditions/L1_LBK_4obrazy_test.csv
    conditions = []
    loopType = sequential
    endPoints = [1,5]
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    Routine fixation
    Routine stimulus
    Routine gray
  LoopTerminator trials
  Routine rating
  Routine monitoring
  Routine end
